PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = staircase
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5: # 50:50 probability
            orrientation= -level
            corr_ans= 'left'

        else :
            orrientation= level
            corr_ans= 'right'
      End Routine:
        thisExp.addData('corrans' , corr_ans)
        thisExp.addData('orrientation' , orrientation)
        thisExp.addData('key_resp.corr' , key_resp.corr)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = orrientation
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator trials_2 loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 200
    start value = 10
    step sizes = [2,2,1,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator trials_2
