PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = finalproject
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $words
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    ImageComponent image
      image [set every repeat] = $Img
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 's','f'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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  Routine intro
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        WELCOME!

        Instructions: You will see a smiling and a frowning face on your screen once the experiment begins. You have to judge which of the two faces is brighter.

        You will have 5 seconds to respond by pressing 'S' on the keyboard if the smiling face is brighter or 'F' if the frowning face is brighter.

        There are 120 trials.

        Click the spacebar to begin.  All the best!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ANANYAA/Downloads/schemanticfaces.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\gray1.png', 'words': 'abuse', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\gray2.png', 'words': 'dead', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\yellow1.png', 'words': 'calamity', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\yellow2.png', 'words': 'broke', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\red1.png', 'words': 'dead', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\red2.png', 'words': 'conflict', 'valence': 'negative'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\gray1.png', 'words': 'prize', 'valence': 'positive'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\gray2.png', 'words': 'praise ', 'valence': 'positive'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\yellow1.png', 'words': 'holiday', 'valence': 'positive'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\yellow2.png', 'words': 'laugh', 'valence': 'positive'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\red1.png', 'words': 'peace', 'valence': 'positive'},
      {'Img': 'C:\\Users\\ANANYAA\\Desktop\\schemantic faces\\red2.png', 'words': 'care', 'valence': 'positive'}]
    Routine trial
  LoopTerminator trials
  Routine end
