PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = sequential_learning
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = -0.2549, 0.2392, 0.2549
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = seq_learning1.xlsx
      loopType = fullRandom
      nReps = 50
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      conditions:
        [{'pos': -50, 'corr_resp': 'x', 'vn': 's'},
        {'pos': 150, 'corr_resp': 'v', 'vn': 's'},
        {'pos': 50, 'corr_resp': 'c', 'vn': 's'},
        {'pos': -150, 'corr_resp': 'z', 'vn': 's'}]
      Routine trial
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = seq_learning2.xlsx
      loopType = sequential
      nReps = 50
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      conditions:
        [{'pos': -50, 'corr_resp': 'x', 'vn': 'r'},
        {'pos': 150, 'corr_resp': 'v', 'vn': 'r'},
        {'pos': 50, 'corr_resp': 'c', 'vn': 'r'},
        {'pos': -150, 'corr_resp': 'z', 'vn': 'r'}]
      Routine trial
    LoopTerminator trials_2
  LoopTerminator trials_3
