PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Unfamiliar" , "Familiar"  
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = CLICK TO SUBMIT
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/91739/Desktop/study words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'vase'},
      {'study_words': 'tiger'},
      {'study_words': 'book'},
      {'study_words': 'cushion'},
      {'study_words': 'piano'},
      {'study_words': 'bottle '},
      {'study_words': 'chocolate'},
      {'study_words': 'draught'},
      {'study_words': 'spectacles '},
      {'study_words': 'actor'},
      {'study_words': 'sonnets'},
      {'study_words': 'desktop'},
      {'study_words': 'bag'},
      {'study_words': 'bakery '},
      {'study_words': 'paint'},
      {'study_words': 'university'},
      {'study_words': 'walk'},
      {'study_words': 'purse'},
      {'study_words': 'mitosis'},
      {'study_words': 'library'},
      {'study_words': 'crescent'},
      {'study_words': 'shade'},
      {'study_words': 'blade'},
      {'study_words': 'electricity'},
      {'study_words': 'linguini '},
      {'study_words': 'thunder'},
      {'study_words': 'page'},
      {'study_words': 'letter'},
      {'study_words': 'security'},
      {'study_words': 'convalescent '},
      {'study_words': 'Sing'},
      {'study_words': 'wheelchair'},
      {'study_words': 'format'},
      {'study_words': 'sheet'},
      {'study_words': 'window'},
      {'study_words': 'help'},
      {'study_words': 'view'},
      {'study_words': 'pivot'},
      {'study_words': 'scissor'},
      {'study_words': 'file'},
      {'study_words': 'conspicuous'},
      {'study_words': 'style'},
      {'study_words': 'panini '},
      {'study_words': 'sunlight'},
      {'study_words': 'survival'},
      {'study_words': 'wire'},
      {'study_words': 'hamper'},
      {'study_words': 'amnesia'},
      {'study_words': 'leaf'},
      {'study_words': 'nose'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/91739/Desktop/test words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': '_a_e'},
      {'test_words': 't_g_r'},
      {'test_words': 'c_sh_ on'},
      {'test_words': 'p_a_n_'},
      {'test_words': 'b_ _k'},
      {'test_words': 'bo_t_e'},
      {'test_words': 'c_m_r_'},
      {'test_words': '_p_a_d_'},
      {'test_words': 'p_c_'},
      {'test_words': '__a_n_e'},
      {'test_words': 'b_t_l_'},
      {'test_words': 'ch_c_la_e'},
      {'test_words': 'dr_u_h_'},
      {'test_words': 's_e_tac_es'},
      {'test_words': '_c__r'},
      {'test_words': 's_n_e_s'},
      {'test_words': '_es_t_p'},
      {'test_words': 'b_g'},
      {'test_words': 'ba_er_'},
      {'test_words': '_a_nt'},
      {'test_words': 'un_ve_s_ _y'},
      {'test_words': 'w_ _ k'},
      {'test_words': 'p_r_e'},
      {'test_words': 'm_t_s_s'},
      {'test_words': 'l__ra_y'},
      {'test_words': 'c_e_c_nt'},
      {'test_words': 's_ad_'},
      {'test_words': 'bl_d_'},
      {'test_words': '_l_ctr_c_ty'},
      {'test_words': 'l__gu_n_'},
      {'test_words': '_h_nd_r'},
      {'test_words': 'p_ _e'},
      {'test_words': 'l_t_er'},
      {'test_words': 's_c_r_ _y'},
      {'test_words': '__nv_lesc_nt '},
      {'test_words': 'S_ _g'},
      {'test_words': 'w_e_lc_a_r'},
      {'test_words': 'F_ _ma_'},
      {'test_words': 's_e_t'},
      {'test_words': 'w_nd_w'},
      {'test_words': '_e_p'},
      {'test_words': 'V_ _w'},
      {'test_words': 'p_v_t'},
      {'test_words': '_c_ss_r'},
      {'test_words': 'f_l_'},
      {'test_words': 'c_n_p_cu_us'},
      {'test_words': 'st_l_'},
      {'test_words': 'Pa_ _n_'},
      {'test_words': 's_nl_g_t'},
      {'test_words': 's_rv_v_l'},
      {'test_words': 'w_ _e'},
      {'test_words': 'h_m_er'},
      {'test_words': 'a_n_s__'},
      {'test_words': 'l_ _f'},
      {'test_words': 'sh_rt'},
      {'test_words': 'p_n_appl_'},
      {'test_words': 's_oes'},
      {'test_words': 'wh_t_'},
      {'test_words': '_ar_h_n_s'},
      {'test_words': 'tr_m'},
      {'test_words': 'r_s_'}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
    Routine test
  LoopTerminator trials_2
